PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine SAM_2
    TextComponent question_sam_2_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        calm / excited

        (1 = very calm, 5 = very excited)
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    ImageComponent question_sam_2
      image = stimuli/sam-2.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_1
    TextComponent question_sam_1_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        unhappy / happy

        (1 = very unhappy, 5 = very happy)
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    ImageComponent question_sam_1
      image = stimuli/sam-1.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_1
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_3
    TextComponent question_sam_3_text
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Press a button 1-5 to express how the last video made you feel about being
        controlled / incontrolled

        (1 = very controlled, 5 = very incontrolled)
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    ImageComponent question_sam_3
      image = stimuli/sam-3.png
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_3
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video
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    MovieComponent video_stimuli
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_cross
      fillColor = -0.1765, -0.1765, -0.1765
      shape = cross
      size = (30,30)
      startVal [time (s)] = 0.0
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    KeyboardComponent skip_video
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnaire
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    FormComponent questionnaire_form
      Data Format = rows
      Font = Arial
      Item Padding = 0.02
      Items = variables/questionnaire_form.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.01
      itemColor = white
      markerColor = red
      responseColor = white
      startVal [time (s)] = 0.0
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    KeyboardComponent questionnaire_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation
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    CodeComponent load_design
      Code Type = Py
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      Begin Experiment:
        import csv

        stimuli_design = []
        with open('variables/subjects_design.csv', 'r') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_design.append(row)

        subj_num = int(expInfo['participant'])
        selected_order = stimuli_design[subj_num]
        print(f"Subject {subj_num} - selected order: {selected_order}")
      Begin Routine:
        video_file = 'stimuli/' + selected_order[f'video{video_index}']
        label_text = selected_order[f'label{video_index}']
    TextComponent video_nature_cue_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $"The next video is going to be " + "\n" + str(label_text) + "\n\n" + str(5-int(t))
      units = norm
      wrapWidth = 1.8
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  Routine instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You’ll watch four short, content-friendly videos where each one has a label that either says “AI-generated” or “human-generated”.

        After each video, you’ll fill out a short questionnaire about your experience with this video.

        You can stop and withdraw at any time if you feel uncomfortable or simply don’t want to continue.

        Press SPACE when you're ready.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instructions
  LoopInitiator stimuli loopType="TrialHandler"
    conditionsFile = variables/stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_index', np.int64(1))]),
      OrderedDict([('video_index', np.int64(2))]),
      OrderedDict([('video_index', np.int64(3))]),
      OrderedDict([('video_index', np.int64(4))])]
    Routine preparation
    Routine video
    Routine SAM_1
    Routine SAM_2
    Routine SAM_3
  LoopTerminator stimuli
  Routine questionnaire
